<?xml version="1.0" encoding="utf-8"?>

<Feature SiLA2Version="1.0" FeatureVersion="1.6" MaturityLevel="Draft" Originator="dx.idot.sila"
    Category="dispensing"
    xmlns="http://www.sila-standard.org"
    xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
    xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">

    <Identifier>DispensingService</Identifier>
    <DisplayName>Dispensing Service</DisplayName>
    <Description>
        Service to access the dispensing commands of the I.DOT.
        Please note that the client should insert the respective target and source plates using the Plate Tray Controller before dispensing.
    </Description>
    <Command>
        <Identifier>DispenseProtocol</Identifier>
        <DisplayName>Dispense Protocol</DisplayName>
        <Description>
            Dispenses a CSV protocol located on the I.DOT's hard drive or is accessible by the I.DOT software through a connected network drive.
            This command will only accept CSV protocols with one source and one target plate. More complex dispense runs that utilize additional
            source and/or target plates can be achieved through chaining several such single-plate CSV protocols which are orchestrated by using
            the Plate Tray Controller to load plates in-between. Multi-plate CSV protocols are not supported via this API.
        </Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>FileNamePath</Identifier>
            <DisplayName>File Name Path</DisplayName>
            <Description>
                Full local path to a CSV protocol. The *.csv file must adhere to the I.DOT CSV format. All used liquids, liquid classes,
                and labware formats must be present on the I.DOT.
            </Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>DispenseProtocolResult</Identifier>
            <DisplayName>Dispense Protocol Result</DisplayName>
            <Description>
                Any errors or warnings in XML format produced after a dispensing execution from DispenseProtocol command.
                To get the drop detection result, please use the DropDetectionResult command.
                Example Response:
                <![CDATA[
                <?xml version="1.0" encoding="utf-16"?>
                <CommandResult xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema">
                  <HasErrors>false</HasErrors>
                  <HasWarnings>false</HasWarnings>
                  <Errors />
                  <Warnings />
                </CommandResult>
                ]]>
            </Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Response>
        <DefinedExecutionErrors>
            <Identifier>InvalidFileNamePath</Identifier>
            <Identifier>InvalidCSVProtocol</Identifier>
            <Identifier>InvalidCSVProtocolSettings</Identifier>
            <Identifier>MoreThanOneSourcePlateDetected</Identifier>
            <Identifier>MoreThanOneTargetPlateDetected</Identifier>
            <Identifier>NoSourcePlateDetected</Identifier>
            <Identifier>NoTargetPlateDetected</Identifier>
            <Identifier>UnknownSourcePlate</Identifier>
            <Identifier>UnknownTargetPlate</Identifier>
            <Identifier>UnknownLiquidClass</Identifier>
            <Identifier>OutOfBoundsSourcePlateRow</Identifier>
            <Identifier>OutOfBoundsTargetPlateRow</Identifier>
            <Identifier>OutOfBoundsSourcePlateColumn</Identifier>
            <Identifier>OutOfBoundsTargetPlateColumn</Identifier>
            <Identifier>OutOfBoundsDispenseVolume</Identifier>
            <Identifier>OutOfBoundsAdditionalVolume</Identifier>
            <Identifier>TransferLiquidFailed</Identifier>
        </DefinedExecutionErrors>
    </Command>
    <Command>
        <Identifier>TransferLiquid</Identifier>
        <DisplayName>Transfer Liquid</DisplayName>
        <Description>
            Dispense a predefined volume from a predefined source to a predefined destination on the target plate in x-y coordinates. This command provides
            more low-level access to the dispensing capabilities of the device than the Dispense Protocol Command.

            IMPORTANT! This command enables direct control of the axis movement and can thereby cause damage if used without thorough understanding of the device,
            and careful testing. We recommend to use DispenseProtocol for most users.
        </Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>DispenseStepXmlSchema</Identifier>
            <DisplayName>Dispense Step XML Schema</DisplayName>
            <Description>
                XML formatted array of SiLA parameter set which describes the Dispense Step XML Schema.

                Below is a valid example of the Dispense Step XML Schema. To use it, remove the comment markup that encloses the example and remove the "/" in the
                comment markup that's within some of the elements.
                <![CDATA[
                <?xml version="1.0" encoding="utf-8"?>
                <ArrayOfSiLADispensingStep xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema">
                    <SiLADispensingStep>
                        <Parameter name="SourcePlateType">
                            <String>S.100 Plate</String>
                        </Parameter>
                        <Parameter name="SourceRow">
                            <Int>0</Int>
                        </Parameter>
                        <Parameter name="SourceColumn">
                            <Int>0</Int>
                        </Parameter>
                        <Parameter name="LiquidClassName">
                            <String>VSCY 1 mPa*s (H2O)</String>
                        </Parameter>
                        <Parameter name="LiquidName">
                            <String>Water</String>
                        </Parameter>
                        <Parameter name="Volume_µL">
                            <Float>0.1</Float>
                        </Parameter>
                        <Parameter name="AdditionalVolume_µL">
                            <Float>0</Float>
                        </Parameter>
                        <Parameter name="TargetX_µm">
                            <!-/- equals column 1 of 96 well plate  -/->
                                <Int>14500</Int>
                        </Parameter>
                        <Parameter name="TargetY_µm">
                            <!-/- equals row A of 96 well plate -/->
                                <Int>11250</Int>
                        </Parameter>
                    </SiLADispensingStep>
                    <SiLADispensingStep>
                        <Parameter name="SourcePlateType">
                            <String>S.100 Plate</String>
                        </Parameter>
                        <Parameter name="SourceRow">
                            <Int>1</Int>
                        </Parameter>
                        <Parameter name="SourceColumn">
                            <Int>2</Int>
                        </Parameter>
                        <Parameter name="LiquidClassName">
                            <String>VSCY 1 mPa*s (H2O)</String>
                        </Parameter>
                        <Parameter name="Volume_µL">
                            <Float>0.2</Float>
                        </Parameter>
                        <Parameter name="AdditionalVolume_µL">
                            <Float>0</Float>
                        </Parameter>
                        <Parameter name="TargetX_µm">
                            <!-/- equals column 2 of 96 well plate  -/->
                                <Int>29000</Int>
                        </Parameter>
                        <Parameter name="TargetY_µm">
                            <!-/- equals row B of 96 well plate -/->
                                <Int>22500</Int>
                        </Parameter>
                    </SiLADispensingStep>
                </ArrayOfSiLADispensingStep>
                ]]>

                SourcePlateType: Source plate used on the I.DOT. Currently valid values are S_60 (S.60 Plate), S_100 (S.100 Plate), S_200 (S.200 Plate),
                L_100 (L.100 Plate), HT_60 (HT.60 Plate)

                SourceRow: Positive integer number to specify the source well. 0 equals row A on the source plate.

                SourceColumn: Positive integer number the specify the source well. 0 equals the first column on the source plate.

                LiquidClassName: Name of the liquid class that’s being used for the dispense. These liquid classes are defined in the Liquid Class Library
                in I.DOT Assay Studio (Menu -> Libraries). It is necessary that the liquid class is located in the Liquid Class Library of the device receiving
                the command and has an entry for the Source Plate Type specified above in the same DispenseStepXmlSchema.

                Volume_µL: Volume to be dispensed in this step. The acceptable range for the liquid amounts depend on the liquid class being used and the SourcePlateType.
                As a general guide, we recommend a value above 15nl to ensure highest accuracy and precision. The upper limit of the S.100 plate is 80µl per source well.
                If lower amounts than 15nl are necessary, please refer to our applications team.

                AdditionalVolume_µL: If the workflow causes the initial fill volume of the source well to be higher than the minimum needed volume (i.e. Volume_µL), this
                additional volume should be specified here. This parameter is only used for the I.DOT L to mitigate fill volume based effects on accuracy and precision.

                TargetX_µm: The target X position. Specify as horizontal distance from origin (top-left corner of target plate) in µm.

                TargetY_µm: The target Y position. Specify as vertical distance from origin (top-left corner of target plate) in µm.

            </Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>OptimizeDispenseStepOrder</Identifier>
            <DisplayName>Optimize Dispense Step Order</DisplayName>
            <Description>Optimize dispense step order to decrease dispensing time and use parallel dispensing.</Description>
            <DataType>
                <Basic>Boolean</Basic>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>TransferLiquidResult</Identifier>
            <DisplayName>Transfer Liquid Result</DisplayName>
            <Description>All The Data In XML Format Produced After A Dispensing Execution From TransferLiquid Command.
                Example Response:
                <![CDATA[
                    <?xml version="1.0" encoding="utf-16" standalone="no"?>
                            <ArrayOfDispensingResult xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
                              <DispensingResult>
                                <Step>1</Step>
                                <TargetDrop>3</TargetDrop>
                                <DetectedDrop>3</DetectedDrop>
                                <Timestamp>2024-04-23T15:06:53.3815922+07:00</Timestamp>
                              </DispensingResult>
                              <DispensingResult>
                                <Step>2</Step>
                                <TargetDrop>5</TargetDrop>
                                <DetectedDrop>5</DetectedDrop>
                                <Timestamp>2024-04-23T15:06:54.9375445+07:00</Timestamp>
                                    </DispensingResult>
                                    <DispensingResult>
                                <Step>3</Step>
                                <TargetDrop>4</TargetDrop>
                                <DetectedDrop>4</DetectedDrop>
                                <Timestamp>2024-04-23T15:06:55.9375445+07:00</Timestamp>
                              </DispensingResult>
                                </ArrayOfDispensingResult>
                    ]]>
            </Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Response>
        <DefinedExecutionErrors>
            <Identifier>InvalidDispenseStepXmlSchema</Identifier>
            <Identifier>EmptySiLADispensingSteps</Identifier>
            <Identifier>UnknownSourcePlate</Identifier>
            <Identifier>MoreThanOneSourcePlateDetected</Identifier>
            <Identifier>NoSourcePlateDetected</Identifier>
            <Identifier>UnknownLiquidClass</Identifier>
            <Identifier>MissingLiquidClass</Identifier>
            <Identifier>OutOfBoundsSourcePlateRow</Identifier>
            <Identifier>OutOfBoundsSourcePlateColumn</Identifier>
            <Identifier>OutOfBoundsDispenseVolume</Identifier>
            <Identifier>OutOfBoundsAdditionalVolume</Identifier>
            <Identifier>OutOfBoundsTargetPlateXPosition</Identifier>
            <Identifier>OutOfBoundsTargetPlateYPosition</Identifier>
            <Identifier>TransferLiquidFailed</Identifier>
        </DefinedExecutionErrors>
    </Command>
    <Command>
        <Identifier>SetFillVolume</Identifier>
        <DisplayName>Set Liquids Fill Volumes</DisplayName>
        <Description>
            Sets the fill volume for the specified liquid class. The fill volume determines how much liquid is dispensed
            when the liquid class is used in a Transfer Liquid and Dispense Protocol command.
            It helps calculate the time required to dispense a given volume of liquid. The fill volume is influenced by the liquid class and the source plate used, and is measured in microliters (µL).
        </Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>FillVolumes</Identifier>
            <DisplayName>Fill volumes</DisplayName>
            <Description>
                An XML formatted array of fill volume parameters describes the fill volume XML Schema.

                Below is a valid example of the fill volume parameter XML Schema. To use it, remove the comment markup enclosing the example and the "/" within some of the elements.

                If the Source Well is not defined, the FillVolume_µL for the specified liquid name will be used for all wells in the source plate.
                <![CDATA[
                    <?xml version="1.0" encoding="utf-8"?>
                    <FillVolumeSchema xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                                    xmlns:xsd="http://www.w3.org/2001/XMLSchema">
                        <SourcePlateType>
                            <String>S.100 Plate</String>
                        </SourcePlateType>
                        <ArrayOfFillVolumes>
                            <FillVolume>
                                <FillVolumeParameter Name="LiquidName">
                                    <String>Water</String>
                                </FillVolumeParameter>
                                <FillVolumeParameter Name="FillVolume_µL">
                                    <Int>10</Int>
                                </FillVolumeParameter>
                            </FillVolume>
                            <FillVolume>
                                <FillVolumeParameter Name="LiquidName">
                                    <String>VSCY 2.0 mPa*s (DMSO)</String>
                                </FillVolumeParameter>
                                <FillVolumeParameter Name="FillVolume_µL">
                                    <Int>10</Int>
                                </FillVolumeParameter>
                            </FillVolume>
                        </ArrayOfFillVolumes>
                    </FillVolumeSchema>
                 ]]>
            </Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>DropDetectionResult</Identifier>
        <DisplayName>Drop Detection Result</DisplayName>
        <Description>
            Retrieves drop detection results from the most recent DispenseProtocol command run.
            Each result contains the source well, target well, detected drop count, and target drop count for every dispensing step.
            Returns an empty list if no dispense run has been executed since startup.
            Note that the TransferLiquid commands do not produce drop detection results. Refer to the response of the TransferLiquid command for those dispensing details.
        </Description>
        <Observable>No</Observable>
        <Response>
            <Identifier>DropDetectionResults</Identifier>
            <DisplayName>Drop Detection Results</DisplayName>
            <Description>List of drop detection results.</Description>
            <DataType>
                <List>
                    <DataType>
                        <DataTypeIdentifier>DropDetectionResult</DataTypeIdentifier>
                    </DataType>
                </List>
            </DataType>
        </Response>
    </Command>
    <DataTypeDefinition>
        <Identifier>DropDetectionResult</Identifier>
        <DisplayName>Drop Detection Result</DisplayName>
        <Description>Drop detection result for a single dispensing step.</Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>SourceWell</Identifier>
                    <DisplayName>Source Well</DisplayName>
                    <Description>Name/identifier of the source well (e.g., "A1", "B2").</Description>
                    <DataType>
                        <Basic>String</Basic>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>TargetWell</Identifier>
                    <DisplayName>Target Well</DisplayName>
                    <Description>Name/identifier of the target well (e.g., "A1", "B2").</Description>
                    <DataType>
                        <Basic>String</Basic>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>DetectedDropCount</Identifier>
                    <DisplayName>Detected Drop Count</DisplayName>
                    <Description>Number of drops detected by the drop detection system for this dispensing step.
                    </Description>
                    <DataType>
                        <Basic>Integer</Basic>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>TargetDropCount</Identifier>
                    <DisplayName>Target Drop Count</DisplayName>
                    <Description>Target number of drops that should have been dispensed to this dispensing step.
                    </Description>
                    <DataType>
                        <Basic>Integer</Basic>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>DetectedVolume</Identifier>
                    <DisplayName>Detected Volume</DisplayName>
                    <Description>Dispensed volume calculated from the detected drop count for this dispensing step.
                    </Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>nL</Label>
                                    <Factor>0.000000000001</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>TargetVolume</Identifier>
                    <DisplayName>Target Volume</DisplayName>
                    <Description>Total Volume that should have been dispensed to this dispensing step.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>nL</Label>
                                    <Factor>0.000000000001</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>
    <Property>
        <Identifier>DispensingStatus</Identifier>
        <DisplayName>Dispensing Status</DisplayName>
        <Description>
            The status of the I.DOT Dispensing process. Use this property to monitor DispenseProtocol and TransferLiquid
            command call progress
            as an alternative to observable feature from both command
        </Description>
        <Observable>No</Observable>
        <DataType>
            <Basic>Boolean</Basic>
        </DataType>
    </Property>
    <DefinedExecutionError>
        <Identifier>InvalidFileNamePath</Identifier>
        <DisplayName>Invalid File Name Path</DisplayName>
        <Description>Protocol file not found.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>InvalidCSVProtocol</Identifier>
        <DisplayName>Invalid CSV Protocol</DisplayName>
        <Description>Could not parse CSV protocol.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>InvalidCSVProtocolSettings</Identifier>
        <DisplayName>Invalid CSV Protocol Settings</DisplayName>
        <Description>Could not parse CSV protocol settings.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>MoreThanOneSourcePlateDetected</Identifier>
        <DisplayName>More Than One Source Plate Detected</DisplayName>
        <Description>More than one source plate detected. Split the protocol to protocols with one source plate each.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>MoreThanOneTargetPlateDetected</Identifier>
        <DisplayName>More Than One Target Plate Detected</DisplayName>
        <Description>More than one target plate detected. Split the protocol to protocols with one target plate each.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>NoSourcePlateDetected</Identifier>
        <DisplayName>No Source Plate Detected</DisplayName>
        <Description>No source plate detected.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>NoTargetPlateDetected</Identifier>
        <DisplayName>No Target Plate Detected</DisplayName>
        <Description>No target plate detected.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>UnknownSourcePlate</Identifier>
        <DisplayName>Unknown Source Plate</DisplayName>
        <Description>The source plate format is not supported.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>UnknownTargetPlate</Identifier>
        <DisplayName>Unknown Target Plate</DisplayName>
        <Description>The target plate format is not supported.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>UnknownLiquidClass</Identifier>
        <DisplayName>Unknown Liquid Class</DisplayName>
        <Description>Liquid class was not found in Liquid Class Library.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsSourcePlateRow</Identifier>
        <DisplayName>Out Of Bound Source Plate Row</DisplayName>
        <Description>Source plate row is either negative or greater than the number of available source plate rows.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsTargetPlateRow</Identifier>
        <DisplayName>Out Of Bound Target Plate Row</DisplayName>
        <Description>Target plate row is either negative or greater than the number of available target plate rows.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsSourcePlateColumn</Identifier>
        <DisplayName>Out Of Bound Source Plate Column</DisplayName>
        <Description>Source plate column is either negative or greater than the number of available source plate columns.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsTargetPlateColumn</Identifier>
        <DisplayName>Out Of Bound Target Plate Column</DisplayName>
        <Description>Target plate column is either negative or greater than the number of available target plate columns.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsDispenseVolume</Identifier>
        <DisplayName>Out Of Bound Dispense Volume</DisplayName>
        <Description>Dispense volume is either negative or zero.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsAdditionalVolume</Identifier>
        <DisplayName>Out Of Bound Additional Volume</DisplayName>
        <Description>Additional Volume should be positive .</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>TransferLiquidFailed</Identifier>
        <DisplayName>Transfer Liquid Failed</DisplayName>
        <Description>Error when trying to dispense liquid.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>InvalidDispenseStepXmlSchema</Identifier>
        <DisplayName>Invalid Dispense Step XML Schema</DisplayName>
        <Description>Invalid Dispense Step XML Schema.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>EmptySiLADispensingSteps</Identifier>
        <DisplayName>Empty SiLA Dispensing Steps</DisplayName>
        <Description>No SiLA dispensing steps in the Dispense Step XML.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>MissingLiquidClass</Identifier>
        <DisplayName>No Liquid Class</DisplayName>
        <Description>No liquid class found.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsTargetPlateXPosition</Identifier>
        <DisplayName>Out Of Bound Target Plate X Position</DisplayName>
        <Description>out of bound target plate X position.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>OutOfBoundsTargetPlateYPosition</Identifier>
        <DisplayName>Out Of Bound Target Plate Y Position</DisplayName>
        <Description>out of bound target plate Y position.</Description>
    </DefinedExecutionError>
</Feature>