<?xml version="1.0" encoding="utf-8"?>

<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="dx.idot.sila"
         Category="dispensing"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">

	<Identifier>InitializationController</Identifier>
	<DisplayName>Initialization Controller</DisplayName>
	<Description>
		Controller to reset and initialize the I.DOT. Upon startup of the device, the I.DOT needs to be reset and then initialized.
		This procedure can also be used to recover from an error state that is not solvable otherwise.
	</Description>
	<Command>
		<Identifier>Reset</Identifier>
		<DisplayName>Reset</DisplayName>
		<Description>
			Reset the I.DOT. Sending this command is required right after the connection to the SiLA 2 Server is established.
			Through the flag SimulationMode the device software can either connect to and control the hardware, or run in simulation.

			We do not recommend to reset the device during the execution of another command.
		</Description>
		<Observable>Yes</Observable>
		<Parameter>
			<Identifier>SimulationMode</Identifier>
			<DisplayName>Simulation Mode</DisplayName>
			<Description>
				Connection mode of the I.DOT. 
				SimulationMode=False (called "DeviceMode" in the UI) means running the I.DOT with hardware connectivity; 
				SimulationMode=True (called "DesktopMode" in the UI) means running I.DOT in simulation mode.
			</Description>
			<DataType>
				<Basic>Boolean</Basic>
			</DataType>
		</Parameter>
	</Command>
	<Command>
		<Identifier>Initialize</Identifier>
		<DisplayName>Initialize</DisplayName>
		<Description>Initialize I.DOT instrument.</Description>
		<Observable>Yes</Observable>
	</Command>
</Feature>